PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PSY310_GroupProjectMonsoon
  keyboardBackend = ioHub
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Routines
  Routine garden
    ImageComponent G
      image = G2.jpg
      size = (150, 150)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent whs
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
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    PolygonComponent whs2
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = .5
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    PolygonComponent whs3
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.9
      stopVal [duration (s)] = 0.5
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    ImageComponent G1
      image = G1.jpg
      pos = (-300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent G2
      image = G2.jpg
      pos = (-100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent G3
      image = G4.jpg
      pos = (100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent G4
      image = G3.jpg
      pos = (300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    KeyboardComponent Key_resp_G
      allowedKeys = 'z', 'x', 'c', 'v'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine Mountain
    ImageComponent M
      image = M1.jpg
      size = (150, 150)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent whsm1
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
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    PolygonComponent whsm2
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = .5
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    PolygonComponent whsm3
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.9
      stopVal [duration (s)] = 0.5
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    ImageComponent M1
      image = M4.jpg
      pos = (-300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent M2
      image = M1.jpg
      pos = (-100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent M3
      image = M3.jpg
      pos = (100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent M4
      image = M2.jpg
      pos = (300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    KeyboardComponent key_respM
      allowedKeys = 'z', 'x', 'c', 'v'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine Forest
    ImageComponent For
      image = f3.jpeg
      size = (150, 150)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent whsfo1
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
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    PolygonComponent whsfo2
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = .5
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    PolygonComponent whsfo3
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.9
      stopVal [duration (s)] = .5
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    ImageComponent for1
      image = f2.jpeg
      pos = (-300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5.0
      units = pix
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    ImageComponent For2
      image = f2.jpeg
      pos = (-100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5.0
      units = pix
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    ImageComponent for3
      image = f3.jpeg
      pos = (100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5.0
      units = pix
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    ImageComponent for4
      image = f1.jpeg
      pos = (300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'z', 'x', 'c', 'v'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine arctic
    ImageComponent A
      image = a4.jpg
      size = (150, 150)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent reda
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .5
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    PolygonComponent red_a
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = .5
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    PolygonComponent red__a
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.9
      stopVal [duration (s)] = .5
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    ImageComponent A1
      image = a3.jpg
      pos = (-300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent A2
      image = a1.jpg
      pos = (-100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent A3
      image = a2.jpg
      pos = (100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent A4
      image = a4.jpg
      pos = (300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    KeyboardComponent key_resp_A
      allowedKeys = 'z', 'x', 'c', 'v'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5.0
      storeCorrect = True
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  Routine waterfall
    ImageComponent W
      image = W2.jpg
      size = (150, 150)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent red_w
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .5
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    PolygonComponent red__w
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = .5
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    PolygonComponent red___w
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.9
      stopVal [duration (s)] = .5
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    ImageComponent w1
      image = W1.jpg
      pos = (-300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent w2
      image = W2.jpg
      pos = (-100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent w3
      image = W4.jpg
      pos = (100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent w4
      image = W3.jpg
      pos = (300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    KeyboardComponent key_resp_A_2
      allowedKeys = 'z', 'x', 'c', 'v'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5.0
      storeCorrect = True
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  Routine city
    ImageComponent c
      image = c1.jpg
      size = (150, 150)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent whsC
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .5
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    PolygonComponent whs_C
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = .5
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    PolygonComponent whs__C
      fillColor = white
      shape = rectangle
      size = (1000, 1000)
      startVal [time (s)] = 2.9
      stopVal [duration (s)] = .5
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    ImageComponent c1
      image = c3.jpg
      pos = (-300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent c2
      image = c2.jpg
      pos = (-100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent c3
      image = c1.jpg
      pos = (100, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent c4
      image = c4.jpg
      pos = (300, 60)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      units = pix
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    KeyboardComponent key_resp_C
      allowedKeys = 'z', 'x', 'c', 'v'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5.0
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = position.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'pos': -300, 'corr_resp': 'z'},
      {'pos': -100, 'corr_resp': 'x'},
      {'pos': 100, 'corr_resp': 'c'},
      {'pos': 300, 'corr_resp': 'v'}]
    Routine garden
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = position.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'pos': -300, 'corr_resp': 'z'},
      {'pos': -100, 'corr_resp': 'x'},
      {'pos': 100, 'corr_resp': 'c'},
      {'pos': 300, 'corr_resp': 'v'}]
    Routine Forest
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = position.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'pos': -300, 'corr_resp': 'z'},
      {'pos': -100, 'corr_resp': 'x'},
      {'pos': 100, 'corr_resp': 'c'},
      {'pos': 300, 'corr_resp': 'v'}]
    Routine Mountain
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = position.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'pos': -300, 'corr_resp': 'z'},
      {'pos': -100, 'corr_resp': 'x'},
      {'pos': 100, 'corr_resp': 'c'},
      {'pos': 300, 'corr_resp': 'v'}]
    Routine arctic
  LoopTerminator trials_4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = position.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'pos': -300, 'corr_resp': 'z'},
      {'pos': -100, 'corr_resp': 'x'},
      {'pos': 100, 'corr_resp': 'c'},
      {'pos': 300, 'corr_resp': 'v'}]
    Routine waterfall
  LoopTerminator trials_5
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = position.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'pos': -300, 'corr_resp': 'z'},
      {'pos': -100, 'corr_resp': 'x'},
      {'pos': 100, 'corr_resp': 'c'},
      {'pos': 300, 'corr_resp': 'v'}]
    Routine city
  LoopTerminator trials_6
